<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>320</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Width>320</q1:Width>
            <q1:Height>480</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:FileName>Q1.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Overwrite>true</q2:Overwrite>
        <q2:Suffix>None</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Image Processing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:FindContours">
                <q1:Mode>ConnectedComponent</q1:Mode>
                <q1:Method>ChainApproxSimple</q1:Method>
                <q1:Offset>
                  <q1:X>1</q1:X>
                  <q1:Y>0</q1:Y>
                </q1:Offset>
                <q1:MinArea xsi:nil="true" />
                <q1:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MorphologicalOperator">
                <q1:Size>
                  <q1:Width>3</q1:Width>
                  <q1:Height>3</q1:Height>
                </q1:Size>
                <q1:Anchor>
                  <q1:X>1</q1:X>
                  <q1:Y>1</q1:Y>
                </q1:Anchor>
                <q1:Shape>Ellipse</q1:Shape>
                <q1:Iterations>5</q1:Iterations>
                <q1:Operation>Erode</q1:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>28</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>BinaryInv</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MaskPolygon">
                <q1:MaskType>ToZero</q1:MaskType>
                <q1:FillValue>
                  <q1:Val0>0</q1:Val0>
                  <q1:Val1>0</q1:Val1>
                  <q1:Val2>0</q1:Val2>
                  <q1:Val3>0</q1:Val3>
                </q1:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FileCapture">
          <q1:FileName>Untitled44.avi</q1:FileName>
          <q1:PlaybackRate>30</q1:PlaybackRate>
          <q1:StartPosition>0</q1:StartPosition>
          <q1:PositionUnits>Frames</q1:PositionUnits>
          <q1:Loop>false</q1:Loop>
          <q1:Playing>true</q1:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Frame Count</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Index</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Index" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="q2:CsvWriter">
        <q2:FileName>Q2.csv</q2:FileName>
        <q2:Append>false</q2:Append>
        <q2:Overwrite>true</q2:Overwrite>
        <q2:Suffix>None</q2:Suffix>
        <q2:IncludeHeader>false</q2:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Crop">
          <q1:RegionOfInterest>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Width>320</q1:Width>
            <q1:Height>480</q1:Height>
          </q1:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Image Processing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:FindContours">
                <q1:Mode>ConnectedComponent</q1:Mode>
                <q1:Method>ChainApproxSimple</q1:Method>
                <q1:Offset>
                  <q1:X>1</q1:X>
                  <q1:Y>0</q1:Y>
                </q1:Offset>
                <q1:MinArea xsi:nil="true" />
                <q1:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MorphologicalOperator">
                <q1:Size>
                  <q1:Width>3</q1:Width>
                  <q1:Height>3</q1:Height>
                </q1:Size>
                <q1:Anchor>
                  <q1:X>1</q1:X>
                  <q1:Y>1</q1:Y>
                </q1:Anchor>
                <q1:Shape>Ellipse</q1:Shape>
                <q1:Iterations>5</q1:Iterations>
                <q1:Operation>Erode</q1:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>28</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>BinaryInv</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MaskPolygon">
                <q1:MaskType>ToZero</q1:MaskType>
                <q1:FillValue>
                  <q1:Val0>0</q1:Val0>
                  <q1:Val1>0</q1:Val1>
                  <q1:Val2>0</q1:Val2>
                  <q1:Val3>0</q1:Val3>
                </q1:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>10</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MaskPolygon, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AddBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Index, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>